PsychoPy2experiment version="2021.2.3"
Settings
  Data filename = u'data' + os.path.sep + '%s_%s' %(expInfo['participant'], expInfo['date'])
  Enable Escape = False
  Experiment info = {'participant': '', 'order': "['random', 1, 2, 3]", 'session': '001', 'study': '', 'group': 'A', 'qpid': ''}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['blocks/long_demo/pos_neg_train3_shB.xlsx', 'blocks/long_demo/pos_neg_train3_shC.xlsx', 'blocks/long_demo/pos_neg_train3_shD.xlsx', 'blocks/long_demo/pos_neg_train2_shA.xlsx', 'blocks/long_demo/pos_neg_train2_shB.xlsx', 'blocks/long_demo/pos_neg_train2_shC.xlsx', 'blocks/long_demo/pos_neg_train2_shD.xlsx', 'blocks/long_demo/pos_neg_train3_shA.xlsx', 'blocks/long_demo/pos_neg_train1_shA.xlsx', 'blocks/long_demo/pos_neg_train1_shD.xlsx', 'blocks/long_demo/pos_neg_train1_shB.xlsx', 'blocks/long_demo/pos_neg_train1_shC.xlsx', 'blocks/short_demo/pos_neg_train3_shB.xlsx', 'blocks/short_demo/pos_neg_train3_shC.xlsx', 'blocks/short_demo/pos_neg_train3_shD.xlsx', 'blocks/short_demo/pos_neg_train2_shA.xlsx', 'blocks/short_demo/pos_neg_train2_shB.xlsx', 'blocks/short_demo/pos_neg_train2_shC.xlsx', 'blocks/short_demo/pos_neg_train2_shD.xlsx', 'blocks/short_demo/pos_neg_train3_shA.xlsx', 'blocks/short_demo/pos_neg_train1_shD.xlsx', 'blocks/short_demo/pos_neg_train1_shA.xlsx', 'blocks/short_demo/pos_neg_train1_shB.xlsx', 'blocks/short_demo/pos_neg_train1_shC.xlsx', 'blocks/blocks_order_shortdemo2.xlsx', 'blocks/blocks_order_shortdemo3.xlsx', 'blocks/blocks_order_shortdemo1.xlsx', 'blocks/blocks_order_longdemo1.xlsx', 'blocks/blocks_order_longdemo2.xlsx', 'blocks/blocks_order_longdemo3.xlsx', 'blocks/blocks_order3.xlsx', 'blocks/blocks_order2.xlsx', 'blocks/pos_neg_train3C.xlsx', 'blocks/pos_neg_train3D.xlsx', 'blocks/pos_neg_train2A.xlsx', 'blocks/pos_neg_train2B.xlsx', 'blocks/pos_neg_train2C.xlsx', 'blocks/pos_neg_train2D.xlsx', 'blocks/pos_neg_train3A.xlsx', 'blocks/pos_neg_train3B.xlsx', 'blocks/blocks_order1.xlsx', 'blocks/pos_neg_train1D.xlsx', 'blocks/pos_neg_train1C.xlsx', 'blocks/pos_neg_train1B.xlsx', 'blocks/pos_neg_train1A.xlsx', 'files/go.png', 'files/win_lose2.png', 'files/p100.png', 'files/p25.png', 'files/p75.png', 'files/p50.png', 'files/start.png', 'files/lose.png', 'files/none.png', 'files/pirate.png', 'files/pop_b.png', 'files/pop_g.png', 'files/pop_r.png', 'files/win_lose.png', 'files/win.png', 'files/ball_b.png', 'files/ball_g.png', 'files/ball_r.png', 'files/bubble_pop.wav', 'files/instructions.png']
  Screen = 1
  Units = height
  Use version = 2021.2.3
  Window size (pixels) = [1920, 1080]
  color = black
  expName = IAT-1.4
  logging level = debug
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Routines
  Routine trial
    TextComponent fixation
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 0.5
      units = height
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    MouseComponent touch_resp
      clickable = button_upper, button_middle, button_lower
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.5
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    CodeComponent check_correct
      Code Type = Auto->JS
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      Begin Experiment:
        # set points counter
        coins = 0;
        ghosts = 0;
        total_score = 100;
      Begin Routine:
        # set button image
        button_upper.setImage('files/ball_b.png');
        button_middle.setImage('files/ball_r.png');
        button_lower.setImage('files/ball_g.png');
        gain = 0;
        loss = 0;
        choice= 0;
      End Routine:
        # check if correct (either mouse or keyboard)
        rt = touch_resp.time[0]  # annoyingly mouse is a list of rts
        if (('upper' in touch_resp.clicked_name[0] and win_U==1 and loss_U==0) or
            ('middle' in touch_resp.clicked_name[0] and win_M==1 and loss_M==0) or
            ('lower' in touch_resp.clicked_name[0] and win_L==1 and loss_L==0)):
            corr = 1 # win
            gain = 1
            total_score +=1;
        elif (('upper' in touch_resp.clicked_name[0] and loss_U==-1 and win_U==0) or
            ('middle' in touch_resp.clicked_name[0] and loss_M==-1 and win_M==0) or
            ('lower' in touch_resp.clicked_name[0] and loss_L==-1 and win_L==0)):
            corr = -1 # loss
            loss = -1
            total_score -=1;
        elif (('upper' in touch_resp.clicked_name[0] and win_U==1 and loss_U==-1) or
            ('middle' in touch_resp.clicked_name[0] and win_M==1 and loss_M==-1) or
            ('lower' in touch_resp.clicked_name[0] and win_L==1 and loss_L==-1)):
            corr = 11 # win and loss
            gain = 1
            loss = -1
        else:
            corr = 0 # nothing

        if ('upper' in touch_resp.clicked_name[0]):
            choice = 1
        elif('middle' in touch_resp.clicked_name[0]):
            choice = 2
        elif('lower' in touch_resp.clicked_name[0]):
            choice = 3

        thisExp.addData('choice', choice)
        thisExp.addData('rt',  rt)
        thisExp.addData('gain', gain)
        thisExp.addData('loss', loss)
        thisExp.addData('total_score', total_score)
        thisExp.addData('corr', corr)
    ImageComponent button_lower
      pos = (0, -0.35)
      size = (0.4, 0.3)
      startVal [time (s)] = 0.5
      texture resolution = 512
      units = height
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    ImageComponent button_middle
      size = (0.4, 0.3)
      startVal [time (s)] = 0.5
      texture resolution = 512
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    ImageComponent button_upper
      pos = (0, 0.35)
      size = (0.4, 0.3)
      startVal [time (s)] = 0.5
      texture resolution = 512
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  Routine feedback
    CodeComponent generate_msg
      Code Type = Auto->JS
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      Begin Experiment:
        msg=" "
      Begin Routine:
        # display output
        out_plus_vis=0;
        out_minus_vis=0;
        out_plus_pos = (0, -0.3);
        out_minus_pos = (0, -0.3);
        fb_size = (0.5,0.5);
        feedback_images = ['files/lose.png','files/win.png','files/win_lose2.png','files/none.png']
        if corr==0:
            msg="You don't win or lose"
            img_idx = 3
        elif corr==1:
            msg="You win 1 coin!"
            coins += 1
            img_idx = 1
            out_plus_vis=1;
        elif corr==-1:
            msg="You lose 1 coin"
            ghosts +=1
            img_idx = 0
            out_minus_vis=1;
        else:
            msg = "You win & lose"
            coins += 1
            ghosts +=1
            img_idx = 2
            out_plus_vis=1;
            out_minus_vis=1;
            out_plus_pos = (-0.15, -0.3);
            out_minus_pos = (0.15, -0.3);
            fb_size = (0.24,0.5);

        # Set the image to the new image
        feedback_image.setImage(feedback_images[img_idx])
        #text.text=msg;
        #text.color='white'
    ImageComponent feedback_image
      image = None
      size [set every repeat] = fb_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      texture resolution = 512
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    TextComponent out_plus
      color = green
      letterHeight = 0.1
      opacity [set every repeat] = out_plus_vis
      pos [set every repeat] = out_plus_pos
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +1
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    TextComponent out_minus
      color = red
      letterHeight = 0.1
      opacity [set every repeat] = out_minus_vis
      pos [set every repeat] = out_minus_pos
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = -1
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  Routine end_thanks
    TextComponent thanks_text
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      units = height
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      text:
        Thanks for playing.

        Do NOT press the ‘escape’ key.

        Saving results, please wait…
  Routine keep_in_mind
    TextComponent keep_in_mind_txt
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      units = height
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      text:
        Keep in mind:

        1) Labels at the top of the screen indicate which catogory goes with which key.

        2) Each word or image has a correct catogory classification

        3) Keep your index fingers on the A and L keys to enable a rapid response.

        4) The test gives no results if you go slow- please try to go as fast as possible
    KeyboardComponent keep_in_mind_done
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    PolygonComponent keep_in_btn
      fillColor = lightgreen
      lineColor = darkgreen
      pos = (0, -0.4)
      shape = rectangle
      size = (0.4, 0.1)
      startVal [time (s)] = 0.0
      units = height
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    TextComponent keep_in_label
      color = darkgreen
      letterHeight = 0.08
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Next...
      units = height
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    MouseComponent mouse
      clickable = keep_in_btn
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine instructions
    CodeComponent set_block_order
      Code Type = Auto->JS
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      Begin Experiment:
        if expInfo['order']=='random':
            expInfo['order'] = randint(1,3)
            order_var = expInfo['order']

        blocks_file = "blocks/blocks_order"+str(expInfo['order'])+".xlsx"
        #blocks_file = "blocks/blocks_order_longdemo"+str(expInfo['order'])+".xlsx"
        #blocks_file = "blocks/blocks_order_shortdemo"+str(expInfo['order'])+".xlsx"
    TextComponent instructs_text
      letterHeight = 0.05
      pos = [0, 0.3]
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = Your goal is to win as many coins as you can. The coins hide behind balloons and you need to find where they are. Tap a balloon to make it pop and discover whether you won a coin.
      units = height
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    PolygonComponent instr_done_button
      fillColor = darksalmon
      lineColor = darksalmon
      pos = (0, -0.4)
      shape = rectangle
      size = (0.4, 0.1)
      startVal [time (s)] = 0.0
      units = height
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    TextComponent instr_done_label
      color = black
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = NEXT
      units = height
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    MouseComponent instr_done_touch
      clickable = instr_done_button
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    ImageComponent image_3
      image = files/instructions.png
      pos = (0, -0.07)
      size = (0.5, 0.17)
      startVal [time (s)] = 0.0
      texture resolution = 512
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  Routine pop_2
    CodeComponent generate_msg_2
      Code Type = Auto->JS
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      Begin Routine:
        # set button image
        button_uppers.setImage('files/ball_b.png')
        button_middles.setImage('files/ball_r.png')
        button_lowers.setImage('files/ball_g.png')

        # explode animation
        if ('upper' in touch_resp.clicked_name[0]):
            button_uppers.setImage('files/pop_b.png')
        #    button_upper_lefts.setImage('explode.gif')
        elif ('middle' in touch_resp.clicked_name[0]):
            button_middles.setImage('files/pop_r.png')
        #    button_upper_rights.setImage('explode.gif')
        elif ('lower' in touch_resp.clicked_name[0]):
            button_lowers.setImage('files/pop_g.png')
        #    button_lower_lefts.setImage('explode.gif')

        #
        ## display output
        #feedback_images = ['lose.png','win.png','win_lose.png','none.png']
        #if corr==0:
        #    msg="Neither win or lose"
        #    img_idx = 3
        #elif corr==1:
        #    msg="You won"
        #    img_idx = 1
        #elif corr==-1:
        #    msg='You loss'
        #    img_idx = 0
        #else:
        #    msg = 'Both win and lose'
        #    img_idx = 2
        #
        ## Set the image to the new image
        #feedback_image.setImage(feedback_images[img_idx])
    ImageComponent button_lowers
      image = None
      pos = (0, -0.35)
      size = (0.4, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.7
      texture resolution = 512
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    ImageComponent button_middles
      image = None
      size = (0.4, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.7
      texture resolution = 512
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    ImageComponent button_uppers
      image = None
      pos = (0, 0.35)
      size = (0.4, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.7
      texture resolution = 512
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    SoundComponent sound_1
      saveStartStop = False
      sound = files/bubble_pop.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.4
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  Routine instruct_img
    ImageComponent image
      image = instruction.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      texture resolution = 512
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  Routine instructions_2
    TextComponent instructs_text_2
      letterHeight = 0.05
      pos = [0, 0.25]
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = Naughty pirates can hide behind balloons. When you find a pirate, he steals one coin from you. You need to try to find the coins and avoid the pirates. Be careful: coins and pirates can move around!
      units = height
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    PolygonComponent instr_done_button_2
      fillColor = darksalmon
      lineColor = none
      pos = (0, -0.4)
      shape = rectangle
      size = (0.4, 0.1)
      startVal [time (s)] = 0.0
      units = height
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    TextComponent instr_done_label_2
      color = black
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = NEXT
      units = height
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    MouseComponent instr_done_touch_2
      clickable = instr_done_button
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    ImageComponent image_4
      image = files/pirate.png
      pos = (0, -0.1)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      texture resolution = 512
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  Routine instructions_3
    TextComponent instructs_text_3
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = height
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      text [set every repeat]:
        Please turn your audio on and get ready to look for the coins!

        You have 100 coins to start with!
    PolygonComponent instr_done_button_3
      fillColor = darksalmon
      lineColor = none
      pos = (0, -0.4)
      shape = rectangle
      size = (0.4, 0.1)
      startVal [time (s)] = 0.0
      units = height
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    TextComponent instr_done_label_3
      color = black
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = NEXT
      units = height
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    MouseComponent instr_done_touch_3
      clickable = instr_done_button
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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  Routine final_score
    TextComponent score
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        #score.setText('You have won '+str(coins)+' coins!')

        end_txt_part = 'Well done!'
        score.setText(
        end_txt_part
        +'\n'+
        '\nYou have won '+str(total_score)+' coin(s).')
  Routine welcome
    PolygonComponent welcome_next_b
      fillColor = darksalmon
      lineColor = darksalmon
      pos = (0, -0.4)
      shape = rectangle
      size = (0.4, 0.1)
      startVal [time (s)] = 0.0
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    MouseComponent welcome_click
      clickable = welcome_next_b
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    TextComponent next_text
      color = black
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = NEXT
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    TextComponent welcome_text
      letterHeight = 0.06
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
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      text:
        Welcome to the ‘Balloon’ game!

        The task should take about 15 minutes.

        There will be three breaks.

        Please make sure you understand the instructions on the next page before you start.
  Routine start_button
    CodeComponent set_break_dur
      Code Type = Auto->JS
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      Begin Experiment:
        break_dur = 9
        #break_dur = 1;
      Begin Routine:
        if progress>0:
            start_img.setImage("files/go.png")
        else:
            start_img.setImage("files/start.png")
      Each Frame:
        countdown = round(1-t)
        if countdown==0 and progress>0:
            continueRoutine = False;
    ImageComponent start_img
      image = None
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    MouseComponent start_press
      clickable = start_img
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      startVal [time (s)] = 0.0
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  Routine block_score
    TextComponent countdown_text
      color = darkgreen
      letterHeight = 0.05
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $break_dur
      text [set every frame] = $timer_text
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    ImageComponent progImg
      image = None
      pos = (0, -.39)
      size = (0.5, 0.0758)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $break_dur
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    CodeComponent prog_code
      Code Type = Auto->JS
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      Begin Experiment:
        progress=0
      Begin Routine:
        progress = progress + 25;
        progImg.setImage("files/p"+str(progress)+".png")
        cash_left=0
        if progress <100:
            txt_part = 'Well done! You are '+str(progress)+'% through! Keep going!'
            block_cash.setText(
            txt_part
            +'\n'+
            '\nYou have '+str(total_score)+' point(s).'+
            '\n'+
            '\nTake a short rest and get ready to play.')
        if progress==100:
            txt_part = 'Well done! You have finished the game. Please wait.'
            block_cash.setText(
            txt_part
            +'\n'+
            '\nYou won '+str(total_score)+' point(s).')

        # reset count
        points = 0
    TextComponent block_cash
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $break_dur
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    CodeComponent timer_code
      Code Type = Auto->JS
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      Begin Routine:
        timer_text = '';
      Each Frame:
        countdown = round(break_dur-0.5-t)
        if progress==100:
            timer_text = '';
            continueRoutine = False;
        if countdown==0:
            if progress==100:
                timer_text=""
            else:
                timer_text="Go!"
        else:
            timer_text="The task will start again in: "+str(countdown) + ' second(s).'
  Routine info
    TextboxComponent textbox
      bold = False
      borderColor = aqua
      editable = True
      fillColor = grey
      letterHeight = 0.05
      lineSpacing = 1
      padding = 0.1
      pos = (0, 0.1)
      size = (1,0.12)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_info
      clickable = next_info
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    TextComponent text_3
      letterHeight = 0.08
      pos = (0, 0.35)
      startVal [time (s)] = 0.0
      text = Please enter your ID.
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    PolygonComponent next_info
      fillColor = darksalmon
      lineColor = darksalmon
      pos = (0, -0.4)
      shape = rectangle
      size = (0.4, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent info_text
      color = black
      letterHeight = 0.05
      pos = (0,-0.4)
      startVal [time (s)] = 0.0
      text = NEXT
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    CodeComponent code_5
      Code Type = Both
      End JS Routine:
        psychoJS.experiment.addData("pid", textbox._pixi.text);
Flow
  Routine welcome
  Routine instructions
  Routine instructions_2
  Routine instructions_3
  LoopInitiator blocks loopType="TrialHandler"
    conditionsFile = $blocks_file
    isTrials = False
    loopType = sequential
    nReps = 1
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    Routine start_button
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = $condsFile
      loopType = sequential
      nReps = 1
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      Routine trial
      Routine pop_2
      Routine feedback
    LoopTerminator trials
    Routine block_score
  LoopTerminator blocks
  Routine final_score
  Routine end_thanks
